PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test1
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Question
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  Routine Instruction
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 53
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    Routine trial
  LoopTerminator trials
